<ReactionScheme>
<!-- First version of merges Gq Gs coupled pathway reactions
     when reactions differ between the models, notes indicate which was source.
     Either StriatumCRCNS/StochasticSP1/MSPNfinalxml/MSPNreactions_4spine_new50.xml for Gs
     or MURI/BoHung/FinalMarch2012/mglu_2ag_reac12mar20desens025.xml for Gq
phosphatase reactions take from revision of Gs to improve Ca dep dphos of Dp32-->

<!-- Molecules species and diffusion constants --> 
<Specie name="ERK"                                 id="ERK"                 kdiff="7"    kdiffunit="mu2/s"/>
<Specie name="pERK"                                id="pERK"                kdiff="7"    kdiffunit="mu2/s"/>
<Specie name="ppERK"                               id="ppERK"                kdiff="7"    kdiffunit="mu2/s"/>
<Specie name="MKP1"                                id="MKP1"                kdiff="7"    kdiffunit="mu2/s"/>
<Specie name="pERKMKP1"                            id="pERKMKP1"                kdiff="7"    kdiffunit="mu2/s"/>
<Specie name="ppERKMKP1"                           id="ppERKMKP1"                kdiff="7"    kdiffunit="mu2/s"/>
<Specie name="ppMAPKKERK"                          id="ppMAPKKERK"                kdiff="7"    kdiffunit="mu2/s"/>
<Specie name="ppMAPKKpERK"                         id="ppMAPKKpERK"                kdiff="7"    kdiffunit="mu2/s"/>
<Specie name="MAPKK"                               id="MAPKK"                kdiff="7"    kdiffunit="mu2/s"/>
<Specie name="pMAPKK"                              id="pMAPKK"                kdiff="7"    kdiffunit="mu2/s"/>
<Specie name="ppMAPKK"                             id="ppMAPKK"                kdiff="7"    kdiffunit="mu2/s"/>
<Specie name="PP2A"                                id="PP2A"                kdiff="7"    kdiffunit="mu2/s"/>
<Specie name="pMAPKKPP2A"                          id="pMAPKKPP2A"                kdiff="7"    kdiffunit="mu2/s"/>
<Specie name="ppMAPKKPP2A"                         id="ppMAPKKPP2A"                kdiff="7"    kdiffunit="mu2/s"/>
<Specie name="bRaf"                                id="bRaf"                              kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="bRafPKAc"                            id="bRafPKAc"                                     kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="pbRaf"                               id="pbRaf"                              kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="bRafRap1MAPKK"                    id="bRafRap1MAPKK"                kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="bRafRap1pMAPKK"                   id="bRafRap1pMAPKK"                kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="pbRafRap1MAPKK"                    id="pbRafRap1MAPKK"                kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="pbRafRap1pMAPKK"                   id="pbRafRap1pMAPKK"                kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="bRafRap1"                         id="bRafRap1"                kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="pbRafRap1"                         id="pbRafRap1"                kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="Raf1Rap1"                            id="Raf1Rap1"                  kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="Rap1GTP"                             id="Rap1GTP"                kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="Rap1GDP"                             id="Rap1GDP"                kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="Epac"                                id="Epac"                kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="EpacRap1"                            id="EpacRap1"                kdiff="0.6"    kdiffunit="mu2/s"/>
<Specie name="cAMP"                                id="cAMP"                kdiff="86.4"    kdiffunit="mu2/s"/>
<Specie name="buff"                                id="buff"                kdiff="86.4"    kdiffunit="mu2/s"/>
<Specie name="cAMPbuff"                                id="cAMPbuff"                kdiff="86.4"    kdiffunit="mu2/s"/>
<Specie name="EpacAMP"                             id="EpacAMP"                kdiff="10"    kdiffunit="mu2/s"/>
<Specie name="PKAcAMP2"                            id="PKAcAMP2"                kdiff="0.836"    kdiffunit="mu2/s"/>
<Specie name="PKAcAMP4"                            id="PKAcAMP4"                kdiff="0.836"    kdiffunit="mu2/s"/>
<Specie name="PKA"                                 id="PKA"                kdiff="0.836"    kdiffunit="mu2/s"/>
<Specie name="PKAc"                                id="PKAc"                kdiff="0.836"    kdiffunit="mu2/s"/>
<Specie name="PKAr"                                id="PKAr"                kdiff="0.836"    kdiffunit="mu2/s"/>
<Specie name="Src"                                 id="Src"                kdiff="10"    kdiffunit="mu2/s"/>
<Specie name="PKAcSrc"                             id="PKAcSrc"                kdiff="0.836"    kdiffunit="mu2/s"/>
<Specie name="pSrc"                                id="pSrc"                kdiff="1"    kdiffunit="mu2/s"/>
<Specie name="Cbl"                                 id="Cbl"                kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="CblpSrc"                             id="CblpSrc"                kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="pCbl"                                id="pCbl"                kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="CRKC3G"                              id="CRKC3G"                kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="CRKC3GpCbl"                          id="CRKC3GpCbl"                kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="CRKC3GpCblRap1"                      id="CRKC3GpCblRap1"                      kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="Rap1Gap"                          id="Rap1Gap"            kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="Rap1pGap"                         id="Rap1pGap"           kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="Rap1GAP"                          id="Rap1GAP"            kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="Rap1GTPGAP"                          id="Rap1GTPGAP"            kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="SynGap"                              id="SynGap"                kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="pSynGap"                             id="pSynGap"               kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="CK"                                  id="CK"                    kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="CKp"                                 id="CKp"                   kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="CamCa4"                              id="CamCa4"                kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="Cambuff"                             id="Cambuff"                kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="CamCa4buff"                          id="CamCa4buff"                kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="Cambuffslow"                         id="Cambuffslow"                kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="CamCa4buffslow"                      id="CamCa4buffslow"                kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="CKCamCa4"                            id="CKCamCa4"              kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="CKpCamCa4"                           id="CKpCamCa4"             kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="CKpCamCa4Gap"                        id="CKpCamCa4Gap"       kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="PP1"                                 id="PP1"               kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="CKpPP1"                              id="CKpPP1"            kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="CKpCamCa4PP1"                        id="CKpCamCa4PP1"      kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="Gbg" id="Gbg"                                               kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="SrcGbg" id="SrcGbg"                                         kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="Grb2" id="Grb2"                                             kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="Sos" id="Sos"                                               kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="Grb2Sos" id="Grb2Sos"                                       kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="ppERKGrb2Sos" id="ppERKGrb2Sos"                             kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="SrcGbgShc" id="SrcGbgShc"                                   kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="Shc" id="Shc"                                               kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="Shcc" id="Shcc"                                             kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="pShcGrb2Sos" id="pShcGrb2Sos"                               kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="pShcGrb2SosRasGDP" id="pShcGrb2SosRasGDP"                   kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="RasGRF" id="RasGRF"                                         kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="RasGRFRasGDP" id="RasGRFRasGDP"                             kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="CamCa4GRF" id="CamCa4GRF"                             kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="CamCa4GRFRasGDP" id="CamCa4GRFRasGDP"                 kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="Raf1" id="Raf1"                                             kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="Raf1RasMAPKK" id="Raf1RasMAPKK"                       kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="Raf1RaspMAPKK" id="Raf1RaspMAPKK"                     kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="Raf1Ras" id="Raf1Ras"                                 kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="bRafRas" id="bRafRas"                                 kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="bRafRasMAPKK" id="bRafRasMAPKK"                       kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="bRafRaspMAPKK" id="bRafRaspMAPKK"                     kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="RasGTP" id="RasGTP"                                         kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="RasGDP" id="RasGDP"                                         kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="RasGap" id="RasGap"                                   kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="RasGAP" id="RasGAP"                                   kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="RasGTPGAP" id="RasGTPGAP"                                   kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="RaspGap" id="RaspGap"                                 kdiff="0"    kdiffunit="mu2/s"/>

<!--****************************************************************************
    Now, the reactions themselves
    ****************************************************************************-->

<!--ERK ACTIVATION BY ppMAPKK-->


    <!--(ERK phos by ppMAPKK) ppMAPKK+ERK <-> ppMAPKKERK <-> pERK+ppMAPKK-->
    <Reaction name = "ppMAPKK+ERK--ppMAPKKERK" id="ppMAPKK+ERK--ppMAPKKERK">
        <Reactant specieID="ppMAPKK"           />
        <Reactant specieID="ERK"              />
        <Product  specieID="ppMAPKKERK"               />

        <forwardRate> 0.032e-3   </forwardRate>
        <reverseRate> 1.200e-3   </reverseRate>
      
    </Reaction>
    
    <Reaction name = "ppMAPKKERK--pERK+ppMAPKK" id="ppMAPKKERK--pERK+ppMAPKK">
        <Reactant specieID="ppMAPKKERK"           />
        <Product  specieID="pERK"               />
        <Product  specieID="ppMAPKK"               />

        <forwardRate> 0.3e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
      
    </Reaction>
    
<!--(pERK phos by ppMAPKK) ppMAPKK+pERK <-> ppMAPKKpERK <-> ppERK+ppMAPKK-->
    <Reaction name = "ppMAPKK+pERK--ppMAPKKpERK" id="ppMAPKK+pERK--ppMAPKKpERK">
        <Reactant specieID="ppMAPKK"           />
        <Reactant specieID="pERK"              />
        <Product  specieID="ppMAPKKpERK"               />

       <forwardRate> 0.032e-3   </forwardRate>
       <reverseRate> 1.200e-3   </reverseRate>
      
    </Reaction>
    <Reaction name = "ppMAPKKpERK--ppERK+ppMAPKK" id="ppMAPKKpERK--ppERK+ppMAPKK">
        <Reactant specieID="ppMAPKKpERK"           />
        <Product specieID="ppERK"              />
        <Product  specieID="ppMAPKK"               />

       <forwardRate> 0.3e-3   </forwardRate>
       <reverseRate> 0        </reverseRate>
      
    </Reaction>
    
<!--ERK INACTIVATION BY MKP1-->

<!--(ppERK dephos by MKP1) ppERK+MKP1<-> ppERKMKP1 <-> pERK+MKP1-->
    <Reaction name = "ppERK+MKP1--ppERKMKP1" id="ppERK+MKP1--ppERKMKP1">
        <Reactant specieID="ppERK"           />
        <Reactant specieID="MKP1"              />
        <Product  specieID="ppERKMKP1"               />

        <forwardRate> 0.150e-3  </forwardRate>
        <reverseRate> 16e-3  </reverseRate>
        
    </Reaction>
    <Reaction name = "ppERKMKP1--pERK+MKP1" id="ppERKMKP1--pERK+MKP1">
        <Reactant specieID="ppERKMKP1"           />
        <Product  specieID="pERK"               />
        <Product  specieID="MKP1"               />

        <forwardRate> 4e-3  </forwardRate>
        <reverseRate> 0  </reverseRate>
        
    </Reaction>

<!--(pERK dephos by MKP1) pERK+MKP1<-> pERKMKP1 <-> ERK+MKP1-->
    <Reaction name = "pERK+MKP1--pERKMKP1" id="pERK+MKP1--pERKMKP1">
        <Reactant specieID="pERK"           />
        <Reactant specieID="MKP1"              />
        <Product  specieID="pERKMKP1"               />

        <forwardRate> 0.150e-3  </forwardRate>
        <reverseRate> 16e-3  </reverseRate>
        
       
    </Reaction>
    <Reaction name = "pERKMKP1--ERK+MKP1" id="pERKMKP1--ERK+MKP1">
        <Reactant specieID="pERKMKP1"           />
        <Product  specieID="ERK"               />
        <Product  specieID="MKP1"               />

        <forwardRate> 4e-3   </forwardRate>
        <reverseRate> 0   </reverseRate>
       
       </Reaction>


    <!--MAPKK ACTIVATION BY bRafRap1GTP-->
    
<!--(MAPKK phos by bRafRap1) MAPKK + bRafRap1GTP <-> bRafRap1GTPMAPKK <-> pMAPKK + bRafRap1GTP-->
    <Reaction name = "MAPKK+bRafRap1--bRafRap1MAPKK" id="MAPKK+bRafRap1--bRafRap1MAPKK">
        <Reactant specieID="MAPKK"           />
        <Reactant specieID="bRafRap1"              />
        <Product  specieID="bRafRap1MAPKK"               />

        <forwardRate> 0.009375e-3  </forwardRate>
        <reverseRate> 1.200000e-3  </reverseRate>
	
    </Reaction>
    
    <Reaction name = "bRafRap1MAPKK--pMAPKK+bRafRap1" id="bRafRap1MAPKK--pMAPKK+bRafRap1">
        <Reactant specieID="bRafRap1MAPKK"           />
        <Product  specieID="pMAPKK"               />
        <Product  specieID="bRafRap1"               />

        <forwardRate> 0.3e-3 </forwardRate>
        <reverseRate> 0      </reverseRate>
      
    </Reaction>

<!--(pMAPKK phos by bRafRap1) pMAPKK + bRafRap1 <-> bRafRap1pMAPKK <-> ppMAPKK + bRafRap1-->
    <Reaction name = "pMAPKK+bRafRap1--bRafRap1pMAPKK" id="pMAPKK+bRafRap1--bRafRap1pMAPKK">
        <Reactant specieID="pMAPKK"           />
        <Reactant specieID="bRafRap1"              />
        <Product  specieID="bRafRap1pMAPKK"               />

        <forwardRate> 0.009375e-3  </forwardRate>
        <reverseRate> 1.200000e-3  </reverseRate>
	
    </Reaction>
    <Reaction name = "bRafRap1pMAPKK--ppMAPKK+bRafRap1" id="bRafRap1pMAPKK--ppMAPKK+bRafRap1">
        <Reactant specieID="bRafRap1pMAPKK"           />
        <Product  specieID="ppMAPKK"               />
        <Product  specieID="bRafRap1"               />

         <forwardRate> 0.3e-3 </forwardRate>
        <reverseRate> 0      </reverseRate>
 
    </Reaction>
    
      <!--MAPKK ACTIVATION BY pbRafRapGTP-->
    
<!--(MAPKK phos by pbRafRap1GTP) MAPKK + pbRafRap1 <-> pbRafRap1MAPKK <-> pMAPKK + pbRafRap1-->
    <Reaction name = "MAPKK+pbRafRap1--pbRafRap1MAPKK" id="MAPKK+pbRafRap1--pbRafRap1MAPKK">
        <Reactant specieID="MAPKK"           />
        <Reactant specieID="pbRafRap1"              />
        <Product  specieID="pbRafRap1MAPKK"               />

       <forwardRate> 0.009375e-3  </forwardRate>
        <reverseRate> 1.200000e-3  </reverseRate>
      
    </Reaction>
    <Reaction name = "pbRafRap1MAPKK--pMAPKK+pbRafRap1" id="pbRafRap1MAPKK--pMAPKK+pbRafRap1">
        <Reactant specieID="pbRafRap1MAPKK"           />
        <Product  specieID="pMAPKK"               />
        <Product  specieID="pbRafRap1"               />

        <forwardRate> 0.3e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>
    
    <!--(pMAPKK phos by pRaf1Rap1GTP) pMAPKK+pbRafRap1GTP <->pbRafRap1GTPMAPKK <-> ppMAPKK + pbRafRap1GTP -->
    
    <Reaction name = "pMAPKK+pbRafRap1--pbRafRap1pMAPKK" id="pMAPKK+pbRafRap1--pbRafRap1pMAPKK">
        <Reactant specieID="pMAPKK"           />
        <Reactant specieID="pbRafRap1"              />
        <Product  specieID="pbRafRap1pMAPKK"               />

       <forwardRate> 0.00942863e-3  </forwardRate>
        <reverseRate> 1.2e-3  </reverseRate>
      
    </Reaction>
    <Reaction name = "pbRafRap1pMAPKK--ppMAPKK+pbRaf1Rap1" id="pbRafRap1pMAPKK--ppMAPKK+pbRafRap1">
        <Reactant specieID="pbRafRap1pMAPKK"           />
        <Product  specieID="ppMAPKK"               />
        <Product  specieID="pbRafRap1"               />

        <forwardRate> 0.3e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>
    


<!--MAPKK INACTIVATION BY PP2A-->
    
<!--(ppMAPKK dephos by PP2A) ppMAPKK+PP2A <-> ppMAPKKPP2A <-> pMAPKK+PP2A-->
    <Reaction name = "ppMAPKK+PP2A--ppMAPKKPP2A" id="ppMAPKK+PP2A--ppMAPKKPP2A">
        <Reactant specieID="ppMAPKK"           />
        <Reactant specieID="PP2A"              />
        <Product  specieID="ppMAPKKPP2A"               />
                    

        <forwardRate> 0.0019168e-3  </forwardRate>
        <reverseRate> 24.000000e-3  </reverseRate>
       
    </Reaction>
    <Reaction name = "ppMAPKKPP2A--pMAPKK+PP2A" id="ppMAPKKPP2A--pMAPKK+PP2A">
        <Reactant specieID="ppMAPKKPP2A"           />
        <Product  specieID="pMAPKK"               />
        <Product  specieID="PP2A"               />

        <forwardRate> 6e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
       
    </Reaction>

<!--(pMAPKK dephos by PP2A) pMAPKK+PP2A <-> pMAPKKPP2A <-> MAPKK+PP2A-->
    <Reaction name = "pMAPKK+PP2A--pMAPKKPP2A" id="pMAPKK+PP2A--pMAPKKPP2A">
        <Reactant specieID="pMAPKK"           />
        <Reactant specieID="PP2A"              />
        <Product  specieID="pMAPKKPP2A"               />

       <forwardRate> 0.0019168e-3  </forwardRate>
        <reverseRate> 24.000000e-3  </reverseRate>
       
    </Reaction>
    <Reaction name = "pMAPKKPP2A--MAPKK+PP2A" id="pMAPKKPP2A--pMAPKK+PP2A">
        <Reactant specieID="pMAPKKPP2A"           />
        <Product  specieID="MAPKK"               />
        <Product  specieID="PP2A"               />

        <forwardRate> 6e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
       
    </Reaction>

    <!-- Rap1GTP activates bRaf -->
    <!-- (bRaf activation) Rap1GTP + bRaf <-> bRafRap1 -->
    <Reaction name = "Rap1GTP+bRaf--bRafRap1" id="Rap1GTP+bRaf--bRafRap1">
        <Reactant specieID="Rap1GTP"           />
        <Reactant  specieID="bRaf"               />
        <Product  specieID="bRafRap1"               />

       <forwardRate> 0.06e-3   </forwardRate>
       <reverseRate> 0.50e-3   </reverseRate>
    </Reaction>


 <!-- Rap1GTP forms an inactif complex with Raf1 -->
    <!-- (Raf1 complex with Rap1) Rap1GTP + Raf1 <-> Raf1Rap1 -->
    <Reaction name = "Rap1GTP+Raf1--Raf1Rap1" id="Rap1GTP+Raf1--Raf1Rap1">
        <Reactant specieID="Rap1GTP"           />
        <Reactant  specieID="Raf1"               />
        <Product  specieID="Raf1Rap1"               />

       <forwardRate> 0.006e-3   </forwardRate>
       <reverseRate> 1e-3   </reverseRate>
    </Reaction>


 <!-- (PKAc phospho bRaf) PKAc + bRaf <-> PKAc + pbRaf -->
    <Reaction name = "PKAc+bRaf--bRafPKAc" id="PKAc+bRaf--bRafPKAc">
        <Reactant specieID="PKAc"           />
        <Reactant  specieID="bRaf"               />
        <Product  specieID="bRafPKAc"               />

        <forwardRate> 0.0002999e-3   </forwardRate>
        <reverseRate> 16e-3   </reverseRate>
   </Reaction>

   <Reaction name = "bRafPKAc--PKAc+pbRaf" id="bRafPKAc--PKAc+pbRaf">
        <Reactant specieID="bRafPKAc"           />
        <Product  specieID="pbRaf"               />
        <Product  specieID="PKAc"               />

        <forwardRate>  4e-3  </forwardRate>
        <reverseRate>  0  </reverseRate>
   </Reaction>
    
    
<!-- (pbRaf1 activation by Rap1GTP) Rap1GTP + pbRaf  <-> pbRafRapGTP -->
    <Reaction name = "Rap1GTP+bRaf--pbRafRap1" id="Rap1GTP+pbRaf--pbRafRap1">
        <Reactant specieID="Rap1GTP"           />
        <Reactant  specieID="pbRaf"               />
        <Product  specieID="pbRafRap1"               />

         <forwardRate> 0.06e-3   </forwardRate>
       <reverseRate> 0.50e-3   </reverseRate>
   </Reaction>

   <!-- RasGTP binding to bRaf -->
   
  <!-- (bRaf bind to  RasGTP) RasGTP + bRaf <-> bRafRasGTP -->
    <Reaction name = "RasGTP+Raf1--bRafRas" id="RasGTP+bRaf--bRafRas">
        <Reactant specieID="RasGTP"           />
        <Reactant  specieID="bRaf"               />
        <Product  specieID="bRafRas"               />

        <forwardRate> 0.006e-3   </forwardRate>
        <reverseRate> 1e-3   </reverseRate>
    </Reaction>
    
    
  <!--Two pathways to activate Rap1-->
    
    <!--Epac pathway to activate Rap1-->
    
   <!--(Epac binding) Epac + cAMP <-> EpacAMP-->
    <Reaction name = "Epac+cAmp--EpacAMP" id="Epac+cAMP--EpacAMP">
        <Reactant specieID="Epac"           />
        <Reactant  specieID="cAMP"               />
        <Product  specieID="EpacAMP"               />

        <forwardRate> 0.00234e-3   </forwardRate>
        <reverseRate> 0.28000e-3   </reverseRate>
     
     
</Reaction> 
<!--(Epac(GEF) activates Rap1) Epacamp + Rap1<-> EpacRap1 <-> Epacamp + Rap1GTP-->
    <Reaction name = "EpacAMP+Rap1GDP--EpacRap1" id="EpacAMP+Rap1--EpacRap1">
        <Reactant specieID="EpacAMP"           />
        <Reactant specieID="Rap1GDP"              />
        <Product  specieID="EpacRap1"               />

       <forwardRate> 0.012e-3   </forwardRate>
       <reverseRate> 0.960e-3   </reverseRate>
     
    </Reaction> 
    <Reaction name = "EpacRap1--EpacAMP+Rap1GTP" id="EpacRap1--EpacAMP+Rap1GTP">
        <Reactant specieID="EpacRap1"           />
        <Product  specieID="EpacAMP"               />
        <Product  specieID="Rap1GTP"               />

        <forwardRate> 0.024e-3  </forwardRate>
        <reverseRate> 0         </reverseRate>
     
     
    </Reaction>

    
   
    <!--PKA pathway to activate Rap1-->
    
    <!--(activation of Src by PKAc) PKAc + Src <-> PKAcSrc <-> PKAc + pSrc-->
    <Reaction name = "PKAc+Src--PKAcSrc" id="PKAc+Src--PKAcSrc">
        <Reactant specieID="PKAc"           />
        <Reactant specieID="Src"              />
        <Product  specieID="PKAcSrc"               /> 

        <forwardRate> 2.041e-3 </forwardRate>
        <reverseRate> 80.00e-3 </reverseRate>
     
    </Reaction> 
    <Reaction name = "PKAcSrc--PKAc+pSrc" id="PKAcSrc--PKAc+pSrc">
        <Reactant specieID="PKAcSrc"           />
        <Product  specieID="PKAc"              />
        <Product  specieID="pSrc"               />

        <forwardRate> 20e-3  </forwardRate>
        <reverseRate> 0  </reverseRate>
     
    </Reaction> 


<!--(inactivation of pSrc) pSrc<->Src-->
    <Reaction name = "pSrc--Src" id="pSrc--Src">
        <Reactant specieID="pSrc"           />
        <Product  specieID="Src"               />

        <forwardRate> 100e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
   
    </Reaction> 


<!--(activation of Cbl by pSrc) Cbl + pSrc <-> CblpSrc <-> pCbl + pSrc-->
    <Reaction name = "Cbl+pSrc--CblpSrc" id="Cbl+pSrc--CblpSrc">
        <Reactant specieID="Cbl"           />
        <Reactant specieID="pSrc"           />
        <Product  specieID="CblpSrc"               />

        <forwardRate> 0.4e-3  </forwardRate>
        <reverseRate> 160e-3  </reverseRate>
      
    </Reaction> 
    <Reaction name = "CblpSrc--pCbl+pSrc" id="CblpSrc--pCbl+pSrc">
        <Reactant specieID="CblpSrc"      />
        <Product specieID="pCbl"         />
        <Product  specieID="pSrc"       />

        <forwardRate> 40e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>

    <!--(inactivation of pCbl) pCbl<->Cbl-->
    <Reaction name = "pCbl--Cbl" id="pCbl--Cbl">
        <Reactant specieID="pCbl"           />
        <Product  specieID="Cbl"               />

        <forwardRate> 100e-3  </forwardRate>
        <reverseRate> 0  </reverseRate>
   
    </Reaction> 
<!--(activation of CRKC3G by pCbl) CRKC3G + pCbl <=> CRKC3GpCbl -->

    <Reaction name = "CRKC3G+pCbl--CRKC3GpCbl" id="CRKC3G+pCbl--CRKC3GpCbl">
        <Reactant specieID="CRKC3G"           />
        <Reactant specieID="pCbl"            />
        <Product  specieID="CRKC3GpCbl"     />

        <forwardRate> 0.001e-3  </forwardRate>
        <reverseRate> 0.2e-3  </reverseRate>
      
</Reaction> 

<!--(Rap activation by Crk (GEF)) Rap1GDP + CRKC3GpCbl <-> CRKC3GpCblRap1 <-> Rap1GTP + CRKC3GpCbl-->
    <Reaction name = "Rap1GDP+CRKC3GpCbl--CRKC3GpCblRap1" id="Rap1GDP+CRKC3GpCbl--CRKC3GpCblRap1">
        <Reactant specieID="Rap1GDP"              />
        <Reactant specieID="CRKC3GpCbl"          />
        <Product  specieID="CRKC3GpCblRap1"     />

        <forwardRate> 0.101e-3  </forwardRate>
        <reverseRate> 0.800e-3  </reverseRate>
     
    </Reaction> 
    <Reaction name = "CRKC3GpCblRap1--Rap1GTP+CRKC3GpCbl" id="CRKC3GpCblRap1--Rap1GTP+CRKC3GpCbl">
        <Reactant specieID="CRKC3GpCblRap1"           />
        <Product  specieID="Rap1GTP"               />
        <Product  specieID="CRKC3GpCbl"               />

        <forwardRate> 0.2e-3 </forwardRate>
        <reverseRate> 0 </reverseRate>
     
    </Reaction>

    
    <!--(inactivation of Rap1 without Gap) Rap1GTP <-> Rap1GDP-->
    
    <Reaction name = "Rap1GTP--Rap1GDP" id="Rap1GTP--Rap1GDP">
        <Reactant specieID="Rap1GTP"           />
        <Product  specieID="Rap1GDP"               />

        <forwardRate> 0.001e-3   </forwardRate>
        <reverseRate> 0           </reverseRate>
      
    </Reaction>

   <!--(Inactivation of Rap by Rap1GAP) Rap1GTP+Rap1GAP <-> Rap1GTPGAP -> Rap1GAP + Rap1GDP -->

<Reaction name = "Rap1GTP+Rap1GAP--Rap1GTPGAP" id="Rap1GTP+Rap1GAP--Rap1GTPGAP">
  <Reactant specieID="Rap1GTP" />
  <Reactant specieID="Rap1GAP" />
  <Product specieID="Rap1GTPGAP" />

  <forwardRate> 0.2e-3 </forwardRate>
  <reverseRate> 200e-3 </reverseRate>

</Reaction>

<Reaction name = "Rap1GTPGAP--Rap1GAP+Rap1GDP" id = "Rap1GTPGAP--Rap1GAP+Rap1GDP">
  <Reactant specieID="Rap1GTPGAP" />
  <Product specieID="Rap1GAP" />
  <Product specieID="Rap1GDP" />

  <forwardRate> 2e-3 </forwardRate>
  <reverseRate>  0  </reverseRate>

</Reaction>

<!--(Inactivation of Rap by SynGAP) Rap1GTP+SynGap <-> Rap1GTPGap -> SynGap + Rap1GDP -->

<Reaction name = "Rap1GTP+SynGap--Rap1Gap" id="Rap1GTP+SynGap--Rap1Gap">
  <Reactant specieID="Rap1GTP" />
  <Reactant specieID="SynGap" />
  <Product specieID="Rap1Gap" />

  <forwardRate> 0.0105556e-3 </forwardRate>
  <reverseRate> 15.2e-3 </reverseRate>

</Reaction>

<Reaction name = "Rap1Gap--SynGap+Rap1GDP" id = "Rap1Gap--SynGap+Rap1GDP">
  <Reactant specieID="Rap1Gap" />
  <Product specieID="SynGap" />
  <Product specieID="Rap1GDP" />

  <forwardRate> 3.8e-3 </forwardRate>
  <reverseRate>  0  </reverseRate>

</Reaction>

<!--(Inactivation of RapGTP by pSynGAP) Rap1GTP+pSynGap <-> Rap1GTPpGap -> pSynGap + Rap1GDP -->

<Reaction name = "Rap1GTP+pSynGap--Rap1pGap" id="Rap1GTP+pSynGap--Rap1pGap">
  <Reactant specieID="Rap1GTP" />
  <Reactant specieID="pSynGap" />
  <Product specieID="Rap1pGap"/>

  <forwardRate> 0.05267e-3 </forwardRate>
  <reverseRate> 18.96e-3 </reverseRate>

</Reaction>

<Reaction name = "Rap1pGap--pSynGap+Rap1GDP" id = "Rap1pGap--pSynGap+Rap1GDP">
  <Reactant specieID="Rap1pGap" />
  <Product specieID="pSynGap" />
  <Product specieID="Rap1GDP" />

  <forwardRate> 4.74e-3 </forwardRate>
  <reverseRate> 0   </reverseRate>

</Reaction>

 <!-- (Phosphorylation of SynGAP by CaMKII) CKpCamCa4+SynGap <-> CKpCamCa4Gap -> CKpCamCa4+pSynGap -->
    
 <Reaction name = "CKpCamCa4+SynGap--CKpCamCa4Gap" id="CKpCamCa4+SynGap--CKpCamCa4Gap">
  <Reactant specieID="CKpCamCa4" />
  <Reactant specieID="SynGap" />
  <Product specieID="CKpCamCa4Gap" />

  <forwardRate> 0.0657145585798 </forwardRate>
  <reverseRate> 0.00185264674538 </reverseRate>

  </Reaction>

 <Reaction name = "CKpCamCa4Gap--CKpCamCa4+pSynGap" id="CKpCamCa4Gap--CKpCamCa4+pSynGap">
  <Reactant specieID="CKpCamCa4Gap" />
  <Product specieID="pSynGap" />
  <Product specieID="CKpCamCa4" />

  <forwardRate> 0.0000641147667838 </forwardRate>
  <reverseRate> 0 </reverseRate>

 </Reaction>

  
<!-- (inactivation of pSyngap) pSynGap -> SynGap -->
<Reaction name ="pSynGap--SynGap" id="pSynGap--SynGap">
	  <Reactant specieID="pSynGap"/>
	  <Product specieID="SynGap"/>

        <forwardRate> 100e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>
	  
		    
<!-- ******* PKA from Asia Hippo Model ********* -->     
    <!--1) PKA + 2camp <-> PKAcAMP2 -->
    <Reaction name = "PKA_bind" id="PKA_bind">
	<Reactant specieID="PKA"/>
        <Reactant specieID="cAMP" n="2"/>
	<Product specieID="PKAcAMP2"/>


        <forwardRate> 0.261e-6 </forwardRate>
	<reverseRate> 0.060e-3 </reverseRate>
    </Reaction>

    <!--2) PKAcAMP2 + 2cAMP <-> PKAcAMP4 -->
    <Reaction name = "PKAcAMP2_bind" id="PKAcAMP2_bind">
	<Reactant specieID="PKAcAMP2"/>
        <Reactant specieID="cAMP" n="2"/>
	<Product specieID="PKAcAMP4"/>

	<forwardRate> 0.35e-6 </forwardRate>
	<reverseRate> 0.6e-3 </reverseRate>
    </Reaction>

<!--3) PKAcAMP4 <-> 2PKAr(as dimer) + 2PKAc(monomers) -->
    <Reaction name = "PKAcAMP4_diss" id="PKAcAMP4_diss">
	<Reactant specieID="PKAcAMP4"/>
	<Product specieID="PKAr" />
	<Product specieID="PKAc" n="2"/>  

	<forwardRate> 0.24e-3 </forwardRate>
	<reverseRate> 0.0255e-3 </reverseRate>
    </Reaction>

    <!-- Inactivation of cAMP -->
<Reaction name ="cAMP+buff--cAMPbuff" id="cAMP+buff--cAMPbuff">
              <Reactant specieID="cAMP"/>
              <Reactant specieID="buff"/>
	      <Product specieID="cAMPbuff"/>

        <forwardRate> 0.01e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>

    <!-- Inactivation of CamCa4 -->
<Reaction name ="CamCa4+Cambuff--CamCa4buff" id="CamCa4+Cambuff--CamCa4buff">
              <Reactant specieID="CamCa4"/>
              <Reactant specieID="Cambuff"/>
	      <Product specieID="CamCa4buff"/>

        <forwardRate> 0.01e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
</Reaction>


  <!-- Inactivation of CamCa4 2 -->
<Reaction name ="CamCa4+Cambuffslow--CamCa4buffslow" id="CamCa4+Cambuffslow--CamCa4buffslow">
              <Reactant specieID="CamCa4"/>
              <Reactant specieID="Cambuffslow"/>
	      <Product specieID="CamCa4buffslow"/>

        <forwardRate> 0.001e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>
    
<!-- New CamKII part -->

  <!--1) CamCa4 + CK <-> CKCamCa4  -->
    <Reaction name = "CK bind" id="CK-Cam_bind">
        <Reactant specieID="CamCa4"                 />
        <Reactant specieID="CK"                     />
        <Product  specieID="CKCamCa4"               />

        <forwardRate> 0.01e-3   </forwardRate>
        <reverseRate> 1.5e-3      </reverseRate>
        <!--0.8 from ode file
	    reverseRate> 0.8e-3      </reverseRate-->
    </Reaction>

<!--2a) 2 CKCamCa4  <-> 1  CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow2">
        <Reactant specieID="CKCamCa4"  power="2"        />
        <Product  specieID="CKCamCa4"          />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 3.83119676007e-10 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2b)  3 CKCamCa4  <-> 2 CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow3">
        <Reactant specieID="CKCamCa4"  power="3"        />
        <Product  specieID="CKCamCa4"  power="2"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 3.55792141502e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2c) 4 CKCamCa4  <-> 3  CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow4">
        <Reactant specieID="CKCamCa4"  power="4"        />
        <Product  specieID="CKCamCa4"   power="3"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 2.23694832822e-16 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2d)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK2_CKpCam_pow2">
        <Reactant specieID="CKpCamCa4"  power="2"        />
        <Reactant specieID="CKCamCa4"  power="2"        />
        <Product  specieID="CKCamCa4"           />
        <Product  specieID="CKpCamCa4" power="3"         />

        <forwardRate> 1.10450093247e-18 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2e)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK1_CKpCam_pow2">
        <Reactant specieID="CKpCamCa4"  power="2"        />
        <Reactant specieID="CKCamCa4"         />
        <Product  specieID="CKpCamCa4" power="3"         />

        <forwardRate> 3.0330636368e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2f)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK2_CKpCam_pow1">
        <Reactant specieID="CKpCamCa4"   power="2"         />
        <Reactant specieID="CKCamCa4"     power="2"     />
        <Product  specieID="CKpCamCa4" power="3"         />
        <Product  specieID="CKCamCa4"          />

        <forwardRate> 2.39399544094e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

    <!-- CKpCamCa4 <-> CKp + CamCa4 -->
    <Reaction name = "CKp auto" id="CKp_auto">
        <Reactant specieID="CKpCamCa4"              />
        <Product  specieID="CamCa4"                 />
        <Product  specieID="CKp"                    />

        <forwardRate> 0.0008e-3 </forwardRate>
        <reverseRate> 0.01e-3   </reverseRate>
    </Reaction>

<!-- Km=5.1 uM  from foulkes et. al.,  et al., Eur. JBiochem.1983 132(309-313))
     Vmax=5.7 umol/min gives kcat=3.5 sec-1 & kb=14 sec-1 -->
    <!-- kf=0.000039,kb=0.34,kcat=0.086 /sec for CKp only from Myungs paper 2010 PloS -->
    <!-- kf=0.6e-9,kb=0.34e-3,kcat=0.086e-3 /msec for CKp and CKpCam from Myungs Stoch sims-->
    <!-- CKp + PP1 <-> CKpPP1 --> 
    <Reaction name = "CKp_bind" id="CKp_bind">
	<Reactant specieID="CKp"/>
        <Reactant specieID="PP1"/>
	<Product specieID="CKpPP1"/>

	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>

    <!-- CKpPP1 -> PP1 + CK -->
    <Reaction name = "CKpPP1_reac" id="CKpPP1_reac">
	<Reactant specieID="CKpPP1"/>
	<Product specieID="PP1"/>
        <Product specieID="CK"/>

	<forwardRate> 0.086e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>

    <!-- CKpCamCa4 + PP1 <-> CKpCamCa4PP1 -->
    <Reaction name = "CKpCamPP1_bind" id="CKpCamPP1_bind">
	<Reactant specieID="CKpCamCa4"/>
        <Reactant specieID="PP1"/>
`	<Product specieID="CKpCamCa4PP1"/>

	<forwardRate> 8.68282379153e-10 </forwardRate>
        <reverseRate> 5.60009040118e-4 </reverseRate>
    </Reaction>

    <!-- CKpCamCa4PP1 -> PP1 + CKCamCa4 -->
    
    <Reaction name = "CKpCamPP1_reac" id="CKpCamPP1_reac">
	<Reactant specieID="CKpCamCa4PP1"/>
	<Product specieID="PP1"/>
        <Product specieID="CKCamCa4"/>

	<forwardRate> 8.7402349412e-5 </forwardRate>
	<reverseRate> 0 </reverseRate>
	
    </Reaction>


    <!--MAPKK ACTIVATION BY Raf1RasGTP-->
    
<!--(MAPKK phos by Raf1RasGTP) MAPKK + Raf1RasGTP <-> Raf1RasGTPMAPKK <-> pMAPKK + Raf1RasGTP-->
    <Reaction name = "MAPKK+Raf1Ras--Raf1RasMAPKK" id="MAPKK+Raf1Ras--Raf1RasMAPKK">
        <Reactant specieID="MAPKK"           />
        <Reactant specieID="Raf1Ras"              />
        <Product  specieID="Raf1RasMAPKK"               />

        <forwardRate> 0.00937559e-3  </forwardRate>
        <reverseRate> 1.2e-3  </reverseRate>
      
    </Reaction>
    <Reaction name = "Raf1RasMAPKK--pMAPKK+Raf1Ras" id="Raf1RasMAPKK--pMAPKK+Raf1Ras">
        <Reactant specieID="Raf1RasMAPKK"           />
        <Product  specieID="pMAPKK"               />
        <Product  specieID="Raf1Ras"               />

        <forwardRate> 0.3e-3 </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>
    
    <!--(pMAPKK phos by Raf1RasGTP) pMAPKK + Raf1RasGTP <-> Raf1RasGTPMAPKK <-> ppMAPKK + Raf1RasGTP-->
    
    <Reaction name = "pMAPKK+Raf1Ras--Raf1RaspMAPKK" id="pMAPKK+Raf1Ras--Raf1RaspMAPKK">
        <Reactant specieID="pMAPKK"           />
        <Reactant specieID="Raf1Ras"              />
        <Product  specieID="Raf1RaspMAPKK"               />

      <forwardRate> 0.00937559e-3  </forwardRate>
        <reverseRate> 1.2e-3  </reverseRate>
      
    </Reaction>
    <Reaction name = "Raf1RaspMAPKK--ppMAPKK+Raf1Ras" id="Raf1RaspMAPKK--ppMAPKK+Raf1Ras">
        <Reactant specieID="Raf1RaspMAPKK"           />
        <Product  specieID="ppMAPKK"               />
        <Product  specieID="Raf1Ras"               />

        <forwardRate> 0.3e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>

 
  
    <!--MAPKK ACTIVATION BY bRafRasGTP-->
    
<!--(MAPKK phos by bRafRasGTP) MAPKK + bRafRasGTP <-> bRafRasGTPMAPKK <-> pMAPKK + bRafRasGTP-->
    <Reaction name = "MAPKK+bRafRas--bRafRasMAPKK" id="MAPKK+bRafRas--bRafRasMAPKK">
        <Reactant specieID="MAPKK"           />
        <Reactant specieID="bRafRas"              />
        <Product  specieID="bRafRasMAPKK"               />

        <forwardRate> 0.00625039e-3  </forwardRate>
        <reverseRate> 0.8e-3  </reverseRate>
      
    </Reaction>
    <Reaction name = "bRafRasMAPKK--pMAPKK+bRafRas" id="bRafRasMAPKK--pMAPKK+bRafRas">
        <Reactant specieID="bRafRasMAPKK"           />
        <Product  specieID="pMAPKK"               />
        <Product  specieID="bRafRas"               />

        <forwardRate> 0.2e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>
    
    <!--(pMAPKK phos by bRaf1RasGTP) pMAPKK + bRafRasGTP <-> bRafRasGTPMAPKK <-> ppMAPKK + bRafRasGTP-->
    
    <Reaction name = "pMAPKK+bRafRas--bRaf1RaspMAPKK" id="pMAPKK+bRafRasGTP--bRafRaspMAPKK">
        <Reactant specieID="pMAPKK"           />
        <Reactant specieID="bRafRas"              />
        <Product  specieID="bRafRaspMAPKK"               />

       <forwardRate> 0.00625039e-3  </forwardRate>
        <reverseRate> 0.8e-3  </reverseRate>
      
      
    </Reaction>
    <Reaction name = "bRafRaspMAPKK--ppMAPKK+bRafRas" id="bRafRaspMAPKK--ppMAPKK+bRafRas">
        <Reactant specieID="bRafRaspMAPKK"           />
        <Product  specieID="ppMAPKK"               />
        <Product  specieID="bRafRas"               />

        <forwardRate> 0.2e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>



    <!-- RasGTP activates Raf1 -->
    
    <!-- (Raf1 activation) RasGTP + Raf1 <-> RasGTPRaf1 -->
    <Reaction name = "Raf1Ras+Raf1--RasGTP" id="RasGTP+Raf1--Raf1Ras">
        <Reactant specieID="RasGTP"           />
        <Reactant  specieID="Raf1"               />
        <Product  specieID="Raf1Ras"               />

        <forwardRate> 0.06e-3   </forwardRate>
        <reverseRate> 1e-3   </reverseRate>
	
    </Reaction>


   
     <!--Two pathways to activate Ras-->
   <!-- Calmodulin pathway to activate Ras -->
   
  <!--( RasGRF activates Ras)RasGRF +RasGDP <-> RasGRFRasGDP <-> RasGRF + RasGTP-->
    <Reaction name = "RasGRF+RasGDP--RasGRFRasGDP" id="RasGRF+RasGDP--RasGRFRasGDP">
        <Reactant specieID="RasGRF"           />
        <Reactant specieID="RasGDP"              />
        <Product  specieID="RasGRFRasGDP"               />

         <forwardRate> 5.07198401734e-8  </forwardRate>
        <reverseRate> 6.03408114207e-6  </reverseRate>
         
        
    </Reaction>

    <Reaction name = "RasGRFRasGDP--RasGRF+RasGTP" id="RasGRFRasGDP--RasGRF+RasGTP">
        <Reactant specieID="RasGRFRasGDP"               />
        <Product specieID="RasGRF"             />
        <Product specieID="RasGTP"               />

        <forwardRate> 1.90185889031e-6  </forwardRate>
        <reverseRate> 0 </reverseRate>
       
       
    </Reaction>

    <!--(activaton of RasGRF) CamCa4+RasGRF->CamCa4RasGRF -->
    <Reaction name = "CamCa4+RasGRF--CamCa4GRF" id="CamCa4+RasGRF--CamCa4GRF">
        <Reactant specieID="CamCa4"           />
        <Reactant specieID="RasGRF"              />
	<Product  specieID="CamCa4GRF"               />

        <forwardRate> 0.06e-3  </forwardRate>
        <reverseRate> 0.924e-3 </reverseRate>
        
    </Reaction>

<!--(active RasGRF activates Ras)CamCa4GRF +RasGDP <-> CamCa4GRFRasGDP <-> CamCa4GRF + RasGTP-->
    <Reaction name = "CamCa4GRF+RasGDP--CamCa4GRFRasGDP" id="CamCa4GRF+RasGDP--CamCa4GRFRasGDP">
        <Reactant specieID="CamCa4GRF"           />
        <Reactant specieID="RasGDP"              />
        <Product  specieID="CamCa4GRFRasGDP"               />

        <forwardRate> 1.01e-07  </forwardRate>
        <reverseRate> 1.21e-05  </reverseRate>
        
    </Reaction>

    <Reaction name = "CamCa4GRFRasGDP--CamCa4GRF+RasGTP" id="CamCa4GRFRasGDP--CamCa4GRF+RasGTP">
        <Reactant specieID="CamCa4GRFRasGDP"               />
        <Product specieID="CamCa4GRF"             />
        <Product specieID="RasGTP"               />

        <forwardRate> 3.80e-06  </forwardRate>
        <reverseRate> 0 </reverseRate>
       
</Reaction>



<!-- Gbg pathway to activate Ras -->

   <!--(Gbg binds to Src) Gbg+Src <->SrcGbg -->
    <Reaction name = "Gbg+Src--SrcGbg" id="Gbg+Src--SrcGbg">
        <Reactant specieID="Gbg"           />
        <Reactant specieID="Src"              />
	<Product  specieID="SrcGbg"               />

        <forwardRate> 0.0002e-3  </forwardRate>
        <reverseRate> 0.1e-3 </reverseRate>
        
    </Reaction>


 <!--(SrcGbg activates Shc) SrcGbg+Shc<->SrcGbgShc -->
    <Reaction name = "SrcGbg+Shc--SrcGbgShc" id="SrcGbg+Shc--SrcGbgShc">
        <Reactant specieID="SrcGbg"           />
        <Reactant specieID="Shc"              />
	<Product  specieID="SrcGbgShc"               />

        <forwardRate> 0.008e-3  </forwardRate>
        <reverseRate> 0.128e-3 </reverseRate>
        
	</Reaction>

    <Reaction name = "SrcGbgShc--SrcGbg+Shcc" id="SrcGbgShc--SrcGbg+Shcc">
        <Reactant specieID="SrcGbgShc"           />
        <Product  specieID="Shcc"              />
	<Product  specieID="SrcGbg"               />

        <forwardRate> 0.032e-3  </forwardRate>
        <reverseRate> 0 </reverseRate>
        
    </Reaction>


 <!--(Grb2 binds to Sos) Grb2+Sos<->Grb2Sos -->
    <Reaction name = " Grb2+Sos--Grb2Sos" id="Grb2+Sos--Grb2Sos">
        <Reactant specieID="Grb2"           />
        <Reactant specieID="Sos"              />
	<Product  specieID="Grb2Sos"               />

        <forwardRate> 0.00025e-3  </forwardRate>
        <reverseRate> 0.0168e-3 </reverseRate>
        
	</Reaction>


 <!--(Grb2Sos binds to Shcc) Grb2Sos+Shcc<->pShcGrb2Sos -->
    <Reaction name = "Grb2Sos+Shcc--pShcGrb2Sos" id="Grb2Sos+Shcc--pShcGrb2Sos">
        <Reactant specieID="Grb2Sos"           />
        <Reactant specieID="Shcc"              />
	<Product  specieID="pShcGrb2Sos"               />

        <forwardRate> 5e-3  </forwardRate>
        <reverseRate> 0.1e-3 </reverseRate>
        
	</Reaction>


	
 <!--(pShcGrb2Sos activates Ras) pShcGrb2Sos+RasGDP<->pShcGrb2SosRasGDP -->
    <Reaction name = "pShcGrb2Sos+RasGDP--pShcGrb2SosRasGDP" id="pShcGrb2Sos+RasGDP--pShcGrb2SosRasGDP">
        <Reactant specieID="pShcGrb2Sos"           />
        <Reactant specieID="RasGDP"              />
	<Product  specieID="pShcGrb2SosRasGDP"               />

        <forwardRate> 0.0198e-3  </forwardRate>
        <reverseRate> 0.8e-3 </reverseRate>
        
	</Reaction>


    <Reaction name = "pShcGrb2SosRasGDP--pShcGrb2Sos+RasGTP" id="pShcGrb2SosRasGDP--pShcGrb2Sos+RasGTP">
        <Reactant specieID="pShcGrb2SosRasGDP"           />
        <Product  specieID="RasGTP"              />
	<Product  specieID="pShcGrb2Sos"               />

        <forwardRate> 0.2e-3  </forwardRate>
        <reverseRate> 0 </reverseRate>
        
    </Reaction>



    <!-- Negative feedback ERK to SOS -->
 <Reaction name = "ppERK+Grb2Sos--ppERKGrb2Sos" id="ppERK+Grb2Sos--ppERKGrb2Sos">
        <Reactant specieID="Grb2Sos"           />
        <Reactant  specieID="ppERK"              />
	<Product  specieID="ppERKGrb2Sos"               />

        <forwardRate> 0.01953e-3  </forwardRate>
        <reverseRate> 40e-3</reverseRate>
        
 </Reaction>
 
  <Reaction name = "ppERKGrb2Sos--ppERK+Grb2+Sos" id="ppERKGrb2Sos--ppERK+Grb2+Sos">
        <Reactant specieID="ppERKGrb2Sos"           />
        <Product  specieID="ppERK"              />
	<Product  specieID="Sos"               />
	<Product  specieID="Grb2"               />

        <forwardRate> 10e-3  </forwardRate>
        <reverseRate> 0 </reverseRate>
        
    </Reaction>
      
    <!--Syngap activity on Ras -->
  
<!--(Inactivation of RasGTP by SynGAP) RasGTP+SynGap <-> RasGTPGap -> SynGap + RasGDP -->

<Reaction name = "RasGTP+SynGap--RasGap" id="RasGTP+SynGap--RasGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="SynGap" />
  <Product specieID="RasGap" />

  <forwardRate> 0.0009375e-3 </forwardRate>
  <reverseRate> 0.48e-3  </reverseRate>

</Reaction>

<Reaction name = "RasGap--SynGap+RasGDP" id = "RasGap--SynGap+RasGDP">
  <Reactant specieID="RasGap" />
  <Product specieID="SynGap" />
  <Product specieID="RasGDP" />

  <forwardRate> 0.12e-3    </forwardRate>
  <reverseRate>  0  </reverseRate>

</Reaction>

<!--(Inactivation of Ras by pSynGAP) RasGTP+pSynGap <-> RasGTPGap -> pSynGap + RasGDP -->

<Reaction name = "RasGTP+pSynGap--RaspGap" id="RasGTP+pSynGap--RaspGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="pSynGap" />
  <Product specieID="RaspGap" />

  <forwardRate> 0.0113e-3 </forwardRate>
  <reverseRate> 4.32e-3 </reverseRate>

</Reaction>

<Reaction name = "RaspGap--pSynGap+RasGDP" id = "RaspGap--pSynGap+RasGDP">
  <Reactant specieID="RaspGap" />
  <Product specieID="pSynGap" />
  <Product specieID="RasGDP" />

  <forwardRate> 1.08e-3  </forwardRate>
  <reverseRate> 0  </reverseRate>

</Reaction>


<!--(Inactivation of Ras by RasGAP) RasGTP+RasGTPGAP <-> RasGTPGAP -> RasGAP + RasGDP -->

<Reaction name = "RasGTP+RasGTPGAP-- RasGTPGAP" id="RasGTP+RasGTPGAP-- RasGTPGAP">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="RasGAP" />
  <Product specieID="RasGTPGAP" />

  <forwardRate> 0.0495e-3 </forwardRate>
  <reverseRate> 40e-3 </reverseRate>

</Reaction>

<Reaction name = "RasGTPGAP--RasGAP+RasGDP" id = "RasGTPGAP--RasGAP+RasGDP">
  <Reactant specieID="RasGTPGAP" />
  <Product specieID="RasGAP" />
  <Product specieID="RasGDP" />

  <forwardRate> 10e-3  </forwardRate>
  <reverseRate> 0  </reverseRate>

</Reaction>


   </ReactionScheme>

   
