<ReactionScheme>
<!-- Molecule species and diffusion constants -->
    <Specie name="SynGap"                id="SynGap"                kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pSynGap"               id="pSynGap"               kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CKpCamCa4"             id="CKpCamCa4"             kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CKpCamCa4SynGap"       id="CKpCamCa4SynGap"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="RasGTPGap"             id="RasGTPGap"             kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="RasGTP"                id="RasGTP"                kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="RasGDP"                id="RasGDP"                kdiff="0"     kdiffunit="mu2/s"/>
 
<!--*************************************************************************
    Now, the reactions themselves 
    **************************************************************************-->

<!-- (Phosphorylation of SynGAP by CaMKII) CKpCamCa4+SynGap <-> CKpCamCa4SynGap -> CKpCamCa4+pSynGap -->
 <Reaction name = "CKpCamCa4+SynGap--CKpCamCa4SynGap" id="CKpCamCa4+SynGap--CKpCamCa4SynGap">
  <Reactant specieID="CKpCamCa4" />
  <Reactant specieID="SynGap" />
  <Product specieID="CKpCamCa4SynGap" />

  <forwardRate>0.00698e-3 </forwardRate>
  <reverseRate>0.21193e- </reverseRate>
 </Reaction>

 <Reaction name = "CKpCamCa4SynGap--CKpCamCa4+pSynGap" id="CKpCamCa4SynGap--CKpCamCa4+pSynGap">
  <Reactant specieID="CKpCamCa4SynGap" />
  <Product specieID="pSynGap" />
  <Product specieID="CKpCamCa4" />

  <forwardRate>0.27429e-3 </forwardRate>
  <reverseRate>0</reverseRate>
 </Reaction>

 <!--(Inactivation of Ras by SynGAP) RasGTP+SynGap <-> RasGTPGap -> SynGap + RasGDP
 kcat and km from Walkup JBC 2015-->

<Reaction name = "RasGTP+SynGap--RasGTPGap" id="RasGTP+SynGap--RasGTPGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="SynGap" />
  <Product specieID="RasGTPGap" />

  <forwardRate> 0.93e-3</forwardRate>
  <reverseRate> 0.48e-3</reverseRate>
</Reaction>

<Reaction name = "RasGTPGap--SynGap+RasGDP" id = "RasGTPGap--SynGap+RasGDP">
  <Reactant specieID="RasGTPGap" />
  <Product specieID="SynGap" />
  <Product specieID="RasGDP" />

  <forwardRate>0.12e-3</forwardRate>
  <reverseRate> 0 </reverseRate>
</Reaction >

<!--(Inactivation of Ras by pSynGAP) RasGTP+pSynGap <-> RasGTPGap -> pSynGap + RasGDP Activity is higher when phosphorylated -->

<Reaction name = "RasGTP+pSynGap--RasGTPGap" id="RasGTP+pSynGap--RasGTPGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="pSynGap" />
  <Product specieID="RasGTPGap" />

  <forwardRate> </forwardRate>
  <reverseRate> </reverseRate>
</Reaction>

<Reaction name = "RasGTPGap--pSynGap+RasGDP" id = "RasGTPGap--pSynGap+RasGDP">
  <Reactant specieID="RasGTPGap" />
  <Product specieID="pSynGap" />
  <Product specieID="RasGDP" />

  <forwardRate> </forwardRate>
  <reverseRate>  </reverseRate>
 </Reaction>

</ReactionScheme>
