<ReactionScheme>
<!-- First version of merges Gq Gs coupled pathway reactions
     when reactions differ between the models, notes indicate which was source.
     Either StriatumCRCNS/StochasticSP1/MSPNfinalxml/MSPNreactions_4spine_new50.xml for Gs
     or MURI/BoHung/FinalMarch2012/mglu_2ag_reac12mar20desens025.xml for Gq
     phosphatase reactions take from revision of Gs to improve Ca dep dphos of Dp32-->
<!-- calcium stuff first -->
    <Specie name="CamCa4"                id="CamCa4"                kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="RasGRF"                id="RasGRF"                kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CamCa4RasGRF"          id="CamCa4RasGRF"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="RasGDP"                id="RasGDP"                kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CamCa4RasGRFRasGDP"    id="CamCa4RasGRFRasGDP"    kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="RasGTP"                id="RasGTP"                kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="bRaf"                  id="bRaf"                  kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="bRafRasGTP"            id="bRafRasGTP"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="bRafRasGTPMAPKK"       id="bRafRasGTPMAPKK"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="bRafRasGTPpMAPKK"      id="bRafRasGTPpMAPKK"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Rap1GTP"               id="Rap1GTP"               kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="bRafRap1GTP"           id="bRafRap1GTP"           kdiff="0"     kdiffunit="mu2/s"/> 
    <Specie name="bRafRap1GTPMAPKK"      id="bRafRap1GTPMAPKK"      kdiff="0"     kdiffunit="mu2/s"/> 
    <Specie name="bRafRap1GTPpMAPKK"     id="bRafRap1GTPpMAPKK"     kdiff="0"     kdiffunit="mu2/s"/> 
    <Specie name="Rap1Gap"               id="Rap1Gap"               kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="bRafRap1GTPGap"        id="bRafRap1GTPGap"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="bRafRap1Gap"           id="bRafRap1Gap"           kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="MAPKK"                 id="MAPKK"                 kdiff="7"     kdiffunit="mu2/s"/>
    <Specie name="pMAPKK"                id="pMAPKK"                kdiff="7"     kdiffunit="mu2/s"/>
    <Specie name="pMAPKKPP2A"            id="pMAPKKPP2A"            kdiff="7"     kdiffunit="mu2/s"/>
    <Specie name="ppMAPKK"               id="ppMAPKK"               kdiff="7"     kdiffunit="mu2/s"/>
    <Specie name="ppMAPKKPP2A"           id="ppMAPKKPP2A"           kdiff="7"     kdiffunit="mu2/s"/>
    <Specie name="PP2A"                  id="PP2A"                  kdiff="7"     kdiffunit="mu2/s"/>
    <Specie name="ERK"                   id="ERK"                   kdiff="7"     kdiffunit="mu2/s"/>
    <Specie name="pERK"                  id="pERK"                  kdiff="7"     kdiffunit="mu2/s"/>
    <Specie name="ppMARPKKERK"           id="ppMAPKKERK"            kdiff="7"     kdiffunit="mu2/s"/>
    <Specie name="ppMAPKKpERK"           id="ppMAPKKpERK"           kdiff="7"     kdiffunit="mu2/s"/>
    <Specie name="ppERK"                 id="ppERK"                 kdiff="7"     kdiffunit="mu2/s"/>
    <Specie name="MKP1"                  id="MKP1"                  kdiff="7"     kdiffunit="mu2/s"/>
    <Specie name="pERKMKP1"              id="pERKMKP1"              kdiff="7"     kdiffunit="mu2/s"/>
    <Specie name="ppERKMKP1"             id="ppERKMKP1"             kdiff="7"     kdiffunit="mu2/s"/>
    <Specie name="PKAc"                  id="PKAc"                  kdiff="0.836" kdiffunit="mu2/s"/>
    <Specie name="PKAr"                  id="PKAr"                  kdiff="0.836" kdiffunit="mu2/s"/>
    <Specie name="PKA"                   id="PKA"                   kdiff="0.836" kdiffunit="mu2/s"/>
    <Specie name="Src"                   id="Src"                   kdiff="10"    kdiffunit="mu2/s"/>
    <Specie name="PKAcSrc"               id="PKAcSrc"               kdiff="0.836" kdiffunit="mu2/s"/>
    <Specie name="pSrc"                  id="pSrc"                  kdiff="1"     kdiffunit="mu2/s"/>
    <Specie name="Cbl"                   id="Cbl"                   kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CblpSrc"               id="CblpSrc"               kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pCbl"                  id="pCbl"                  kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CRKC3G"                id="CRKC3G"                kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CRKC3GpCbl"            id="CRKC3GpCbl"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CRKC3GpCblRap1"        id="CRKC3GpCblRap1"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Rap1GDP"               id="Rap1GDP"               kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Rap1GTPGap"            id="Rap1GTPGap"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Epac"                  id="Epac"                  kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="camp"                  id="camp"                  kdiff="86.4"  kdiffunit="mu2/s"/>
    <Specie name="PKAcamp2"              id="PKAcamp2"              kdiff="0.836" kdiffunit="mu2/s"/>
    <Specie name="PKAcamp4"              id="PKAcamp4"              kdiff="0.836" kdiffunit="mu2/s"/>
    <Specie name="Epacamp"               id="Epacamp"               kdiff="10"    kdiffunit="mu2/s"/>
    <Specie name="Rap1"                  id="Rap1"                  kdiff="0.6"   kdiffunit="mu2/s"/>
    <Specie name="EpacRap1"              id="EpacRap1"              kdiff="0.6"   kdiffunit="mu2/s"/>
    <Specie name="SynGap"                id="SynGap"                kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pSynGap"               id="pSynGap"               kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="RasGTPGap"             id="RasGTPGap"             kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CKpCamCa4"             id="CKpCamCa4"             kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CKpCamCa4SynGap"       id="CKpCamCa4SynGap"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Gbg"                id="Gbg"                   kdiff="0"     kdiffunit="mu2/s"/> 
    <Specie name="GbgSrc"                id="GbgSrc"                kdiff="0"     kdiffunit="mu2/s"/> 
    <Specie name="CblGbgSrc"             id="CblGbgSrc"             kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CK"                    id="CK"                    kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CKp"                   id="CKp"                   kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CKCamCa4"              id="CKCamCa4"              kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CKpCamCa4"             id="CKpCamCa4"             kdiff="0"     kdiffunit="mu2/s"/>
    
<!--*************************************************************************
    Now, the reactions themselves 
    **************************************************************************-->

<!--PATHWAY 1 TO ACTIVATE ERK-->

<!--(activaton of RasGRF) CamCa4+RasGRF->CamCa4RasGRF -->
    <Reaction name = "CamCa4+RasGRF--CamCa4RasGRF" id="CamCa4+RasGRF--CamCa4RasGRF">
        <Reactant specieID="CamCa4"           />
        <Reactant specieID="RasGRF"              />
        <Product  specieID="CamCa4RasGRF"               />

        <forwardRate> 0.06e-3 </forwardRate>
        <reverseRate> 1e-3        </reverseRate>
        
    </Reaction>

<!--(active RasGRF activates Ras)CamCa4RasGRF +RasGDP <-> CamCa4RasGRFRasGDP <-> CamCa4RasGRF + RasGTP-->
    <Reaction name = "CamCa4RasGRF+RasGDP--CamCa4RasGRFRasGDP" id="CamCa4RasGRF+RasGDP--CamCa4RasGRFRasGDP">
        <Reactant specieID="CamCa4RasGRF"           />
        <Reactant specieID="RasGDP"              />
        <Product  specieID="CamCa4RasGRFRasGDP"               />

        <forwardRate> 0.000198e-3 </forwardRate>
        <reverseRate> 0.08e-3 </reverseRate>
        
    </Reaction>

    <Reaction name = "CamCa4RasGRFRasGDP--CamCa4RasGRF+RasGTP" id="CamCa4RasGRFRasGDP--CamCa4RasGRF+RasGTP">
        <Reactant specieID="CamCa4RasGRFRasGDP"               />
        <Product specieID="CamCa4RasGRF"             />
        <Product specieID="RasGTP"               />

        <forwardRate> 0.02e-3 </forwardRate>
        <reverseRate> 0 </reverseRate>
       
    </Reaction>

<!--(Ras activates bRaf) RasGTP+bRaf <-> bRafRasGTP-->
    <Reaction name = "RasGTP+bRaf--bRafRasGTP" id="RasGTP+bRaf--bRafRasGTP">
        <Reactant specieID="RasGTP"           />
        <Reactant specieID="bRaf"              />
        <Product  specieID="bRafRasGTP"               />

        <forwardRate> 0.06e-3 </forwardRate>
        <reverseRate> 0.5e-3        </reverseRate>
      
    </Reaction>

<!--(Inactivation of Ras by SynGAP) RasGTP+SynGap <-> RasGTPGap -> SynGap + RasGDP -->

<Reaction name = "RasGTP+SynGap--RasGTPGap" id="RasGTP+SynGap--RasGTPGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="SynGap" />
  <Product specieID="RasGTPGap" />

  <forwardRate>0.02e-3</forwardRate>
  <reverseRate>6.4e-3</reverseRate>

</Reaction>

<Reaction name = "RasGTPGap--SynGap+RasGDP" id = "RasGTPGap--SynGap+RasGDP">
  <Reactant specieID="RasGTPGap" />
  <Product specieID="SynGap" />
  <Product specieID="RasGDP" />

  <forwardRate>1.6e-3</forwardRate>
  <reverseRate>400e-3</reverseRate>

</Reaction>

<!--(Inactivation of Rap by SynGAP) Rap1GTP+SynGap <-> Rap1GTPGap -> SynGap + Rap1GDP -->

<Reaction name = "Rap1GTP+SynGap--Rap1GTPGap" id="Rap1GTP+SynGap--Rap1GTPGap">
  <Reactant specieID="Rap1GTP" />
  <Reactant specieID="SynGap" />
  <Product specieID="Rap1GTPGap" />

  <forwardRate>0 </forwardRate>
  <reverseRate>0 </reverseRate>

</Reaction>

<Reaction name = "Rap1GTPGap--SynGap+Rap1GDP" id = "Rap1GTPGap--SynGap+Rap1GDP">
  <Reactant specieID="Rap1GTPGap" />
  <Product specieID="SynGap" />
  <Product specieID="Rap1GDP" />

  <forwardRate>0 </forwardRate>
  <reverseRate>0 </reverseRate>

</Reaction>

<!-- (Phosphorylation of SynGAP by CaMKII) CKpCamCa4+SynGap <-> CKpCamCa4SynGap -> CKpCamCa4+pSynGap -->
 <Reaction name = "CKpCamCa4+SynGap--CKpCamCa4SynGap" id="CKpCamCa4+SynGap--CKpCamCa4SynGap">
  <Reactant specieID="CKpCamCa4" />
  <Reactant specieID="SynGap" />
  <Product specieID="CKpCamCa4SynGap" />

  <forwardRate>0 </forwardRate>
  <reverseRate>0 </reverseRate>

 </Reaction>

 <Reaction name = "CKpCamCa4SynGap -- CKpCamCa4+pSynGap" id="CKpCamCa4SynGap -- CKpCamCa4+pSynGap">
  <Reactant specieID="CKpCamCa4SynGap" />
  <Product specieID="pSynGap" />
  <Product specieID="CKpCamCa4" />

  <forwardRate>0 </forwardRate>
  <reverseRate>0 </reverseRate>

 </Reaction>

<!--(Inactivation of Ras by pSynGAP) RasGTP+pSynGap <-> RasGTPGap -> pSynGap + RasGDP -->

<Reaction name = "RasGTP+pSynGap--RasGTPGap" id="RasGTP+pSynGap--RasGTPGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="pSynGap" />
  <Product specieID="RasGTPGap" />

  <forwardRate>0 </forwardRate>
  <reverseRate>0 </reverseRate>

</Reaction>

<Reaction name = "RasGTPGap--pSynGap+RasGDP" id = "RasGTPGap--pSynGap+RasGDP">
  <Reactant specieID="RasGTPGap" />
  <Product specieID="pSynGap" />
  <Product specieID="RasGDP" />

  <forwardRate>0 </forwardRate>
  <reverseRate>0 </reverseRate>

</Reaction>
    
<!--(Inactivation of Rap by pSynGAP) Rap1GTP+pSynGap <-> Rap1GTPGap -> pSynGap + Rap1GDP -->

<Reaction name = "Rap1GTP+pSynGap--Rap1GTPGap" id="Rap1GTP+pSynGap--Rap1GTPGap">
  <Reactant specieID="Rap1GTP" />
  <Reactant specieID="pSynGap" />
  <Product specieID="Rap1GTPGap" />

  <forwardRate>0 </forwardRate>
  <reverseRate>0 </reverseRate>

</Reaction>

<Reaction name = "Rap1GTPGap--pSynGap+Rap1GDP" id = "Rap1GTPGap--pSynGap+Rap1GDP">
  <Reactant specieID="Rap1GTPGap" />
  <Product specieID="pSynGap" />
  <Product specieID="Rap1GDP" />

  <forwardRate>0 </forwardRate>
  <reverseRate>0 </reverseRate>

</Reaction>

<!--(MAPKK phos1 by bRaf-Ras) MAPKK + bRafRasGTP <-> bRafRasGTPMAPKK <-> pMAPKK + bRafRasGTP-->
    <Reaction name = "MAPKK+bRafRasGTP--bRafRasGTPMAPKK" id="MAPKK+bRafRasGTP--bRafRasGTPMAPKK">
        <Reactant specieID="MAPKK"           />
        <Reactant specieID="bRafRasGTP"              />
        <Product  specieID="bRafRasGTPMAPKK"               />

        <forwardRate> .00625e-3 </forwardRate>
        <reverseRate> 0.8e-3        </reverseRate>
      
    </Reaction> 
    <Reaction name = "bRafRasGTPMAPKK--pMAPKK+bRafRasGTP" id="bRafRasGTPMAPKK--pMAPKK+bRafRasGTP">
        <Reactant specieID="bRafRasGTPMAPKK"           />
        <Product  specieID="pMAPKK"               />
        <Product  specieID="bRafRasGTP"          />

        <forwardRate> 0.2e-3 </forwardRate>
        <reverseRate> 0       </reverseRate>
      
    </Reaction> 

<!--(MAPKK phos2 by bRaf-Ras) pMAPKK + bRafRasGTP <-> bRafRasGTPpMAPKK <-> ppMAPKK + bRafRasGTP-->
    <Reaction name = "pMAPKK+bRafRasGTP--bRafRasGTPpMAPKK" id="pMAPKK+bRafRasGTP--bRafRasGTPpMAPKK">
        <Reactant specieID="pMAPKK"           />
        <Reactant specieID="bRafRasGTP"              />
        <Product  specieID="bRafRasGTPpMAPKK"               />

        <forwardRate> .00625e-3   </forwardRate>
        <reverseRate> 0.8e-3       </reverseRate>
       
    </Reaction> 
    <Reaction name = "bRafRasGTPpMAPKK--ppMAPKK+bRafRasGTP" id="bRafRasGTPpMAPKK--ppMAPKK+bRafRasGTP">
        <Reactant specieID="bRafRasGTPpMAPKK"           />
        <Product  specieID="ppMAPKK"               />
        <Product  specieID="bRafRasGTP"               />

        <forwardRate> 0.2e-3   </forwardRate>
        <reverseRate> 0      </reverseRate>
       
    </Reaction> 

<!--(ppMAPKK dephos1) ppMAPKK+PP2A <-> ppMAPKKPP2A <-> pMAPKK+PP2A-->
    <Reaction name = "ppMAPKK+PP2A--ppMAPKKPP2A" id="ppMAPKK+PP2A--ppMAPKKPP2A">
        <Reactant specieID="ppMAPKK"           />
        <Reactant specieID="PP2A"              />
        <Product  specieID="ppMAPKKPP2A"               />
                    

        <forwardRate> 0.00192e-3  </forwardRate>
        <reverseRate> 24e-3        </reverseRate>
       
    </Reaction> 
    <Reaction name = "ppMAPKKPP2A--pMAPKK+PP2A" id="ppMAPKKPP2A--pMAPKK+PP2A">
        <Reactant specieID="ppMAPKKPP2A"           />
        <Product  specieID="pMAPKK"               />
        <Product  specieID="PP2A"               />

        <forwardRate> 6e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
       
    </Reaction> 

<!--(ppMAPKK dephos2) pMAPKK+PP2A <-> pMAPKKPP2A <-> MAPKK+PP2A-->
    <Reaction name = "pMAPKK+PP2A--pMAPKKPP2A" id="pMAPKK+PP2A--pMAPKKPP2A">
        <Reactant specieID="pMAPKK"           />
        <Reactant specieID="PP2A"              />
        <Product  specieID="pMAPKKPP2A"               />

        <forwardRate> 0.00191e-3   </forwardRate>
        <reverseRate> 24e-3        </reverseRate>
      
    </Reaction> 
    <Reaction name = "pMAPKKPP2A--MAPKK+PP2A" id="pMAPKKPP2A--MAPKK+PP2A">
        <Reactant specieID="pMAPKKPP2A"           />
        <Product  specieID="MAPKK"               />
        <Product  specieID="PP2A"               />

        <forwardRate> 6e-3  </forwardRate>
        <reverseRate> 0    </reverseRate>
      
    </Reaction> 



<!--PATHWAY 2 TO ACTIVATE ERK-->

<!--(activation of Src by PKAc) PKAc + Src <-> PKAcSrc <-> PKAc + pSrc-->
    <Reaction name = "PKAc+Src--PKAcSrc" id="PKAc+Src--PKAcSrc">
        <Reactant specieID="PKAc"           />
        <Reactant specieID="Src"              />
        <Product  specieID="PKAcSrc"               /> 

        <forwardRate> 2.00e-3 </forwardRate>
        <reverseRate> 80e-3   </reverseRate>
     
    </Reaction> 
    <Reaction name = "PKAcSrc--PKAc+pSrc" id="PKAcSrc--PKAc+pSrc">
        <Reactant specieID="PKAcSrc"           />
        <Product  specieID="PKAc"              />
        <Product  specieID="pSrc"               />

        <forwardRate> 20e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
     
    </Reaction> 


<!--(inactivation of pSrc) pSrc<->Src-->
    <Reaction name = "pSrc--Src" id="pSrc--Src">
        <Reactant specieID="pSrc"           />
        <Product  specieID="Src"               />

        <forwardRate> 100e-3   </forwardRate>
        <reverseRate> 0.1e-3        </reverseRate>
   
    </Reaction> 


<!--(activation of Cbl) Cbl + pSrc <-> CblpSrc <-> pCbl + pSrc-->
    <Reaction name = "Cbl+pSrc--CblpSrc" id="Cbl+pSrc--CblpSrc">
        <Reactant specieID="Cbl"           />
        <Reactant specieID="pSrc"           />
        <Product  specieID="CblpSrc"               />

        <forwardRate> 0.0802e-3  </forwardRate>
        <reverseRate> 0.1e-3     </reverseRate>
      
    </Reaction> 
    <Reaction name = "CblpSrc--pCbl+pSrc" id="CblpSrc--pCbl+pSrc">
        <Reactant specieID="CblpSrc"           />
        <Product specieID="pCbl"           />
        <Product  specieID="pSrc"               />

        <forwardRate> 40e-3   </forwardRate>
        <reverseRate> 0       </reverseRate>
      
    </Reaction> 

<!--(inactivation of pCbl) pCbl<->Cbl-->
    <Reaction name = "pCbl--Cbl" id="pCbl--Cbl">
        <Reactant specieID="pCbl"           />
        <Product  specieID="Cbl"               />

        <forwardRate> 10e-3   </forwardRate>
        <reverseRate> 0.01e-3     </reverseRate>
     
    </Reaction>


<!--(activation of CRK step2) CRKC3G + pCbl <=> CRKC3GpCbl -->
    <Reaction name = "CRKC3G+pCbl--CRKC3GpCbl" id="CRKC3G+pCbl--CRKC3GpCbl">
        <Reactant specieID="CRKC3G"           />
        <Reactant specieID="pCbl"              />
        <Product  specieID="CRKC3GpCbl"               />

        <forwardRate> 0.001e-3  </forwardRate>
        <reverseRate> 0.2e-3    </reverseRate>
      
    </Reaction> 

<!--TWO WAYS TO ACTIVATE Rap1-->

<!--(Rap activation by Crk (GEF)) Rap1GDP + CRKC3GpCbl <-> CRKC3GpCblRap1 <-> Rap1GTP + CRKC3GpCbl-->
    <Reaction name = "Rap1GDP+CRKC3GpCbl--CRKC3GpCblRap1" id="Rap1GDP+CRKC3GpCbl--CRKC3GpCblRap1">
        <Reactant specieID="Rap1GDP"           />
        <Reactant specieID="CRKC3GpCbl"              />
        <Product  specieID="CRKC3GpCblRap1"               />

        <forwardRate> 0.04e-3   </forwardRate>
        <reverseRate> 0.2e-3        </reverseRate>
     
    </Reaction> 
    <Reaction name = "CRKC3GpCblRap1--Rap1GTP+CRKC3GpCbl" id="CRKC3GpCblRap1--Rap1GTP+CRKC3GpCbl">
        <Reactant specieID="CRKC3GpCblRap1"           />
        <Product  specieID="Rap1GTP"               />
        <Product  specieID="CRKC3GpCbl"               />

        <forwardRate> 0.2e-3   </forwardRate>
        <reverseRate> 0       </reverseRate>
     
    </Reaction> 
<!--(Epac binding) Epac + camp <-> Epacamp-->
    <Reaction name = "Epac+camp--Epacamp" id="Epac+camp--Epacamp">
        <Reactant specieID="Epac"           />
        <Reactant  specieID="camp"               />
        <Product  specieID="Epacamp"               />

        <forwardRate> 0.000234e-3   </forwardRate>
        <reverseRate> 0.28e-3       </reverseRate>
     
    </Reaction>     

<!--(Epac(GEF) activates Rap1) Epacamp + Rap1<-> EpacRap1 <-> Epacamp + Rap1GTP-->
    <Reaction name = "Epacamp+Rap1GTP--EpacRap1" id="Epacamp+Rap1--EpacRap1">
        <Reactant specieID="Epacamp"           />
        <Reactant specieID="Rap1GDP"              />
        <Product  specieID="EpacRap1"               />

        <forwardRate> 0.012e-3   </forwardRate>
        <reverseRate> 0.96e-3        </reverseRate>
     
    </Reaction> 
    <Reaction name = "EpacRap1--Epacamp+Rap1GTP" id="EpacRap1--Epacamp+Rap1GTP">
        <Reactant specieID="EpacRap1"           />
        <Product  specieID="Epacamp"               />
        <Product  specieID="Rap1GTP"               />

        <forwardRate> 0.024e-3   </forwardRate>
        <reverseRate>  0      </reverseRate>
     
    </Reaction> 
<!--(inactivation of Rap1 without Gap) Rap1GTP <-> Rap1GDP-->
    <Reaction name = "Rap1GTP--Rap1GDP" id="Rap1GTP--Rap1GDP">
        <Reactant specieID="Rap1GTP"           />
        <Product  specieID="Rap1GDP"               />

        <forwardRate> .0001e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
      
    </Reaction> 

<!--(inactivation of Rap1) Rap1GTP +Rap1Gap <-> Rap1GTPGap <-> Rap1Gap+Rap1GDP-->
    <Reaction name = "Rap1GTP+Rap1Gap--Rap1GTPGap" id="Rap1GTP+Rap1Gap--Rap1GTPGap">
        <Reactant specieID="Rap1GTP"           />
        <Reactant specieID="Rap1Gap"              />
        <Product  specieID="Rap1GTPGap"               />

        <forwardRate> 0.202e-3   </forwardRate>
        <reverseRate> 200e-3        </reverseRate>
 
    </Reaction> 

    <Reaction name = "Rap1GTPGap--Rap1Gap+Rap1GDP" id="Rap1GTPGap--Rap1Gap+Rap1GDP">
        <Reactant specieID="Rap1GTPGap"           />
        <Reactant specieID="Rap1Gap"              />
        <Product  specieID="Rap1GDP"               />

        <forwardRate> 2e-3   </forwardRate>
        <reverseRate> 0       </reverseRate>

    </Reaction>

<!--(Rap1 activates bRaf) Rap1GTP+bRaf <-> bRafRap1GTP-->
    <Reaction name = "Rap1GTP+bRaf--bRafRap1GTP" id="Rap1GTP+bRaf -- bRafRap1GTP">
        <Reactant specieID="Rap1GTP"           />
        <Reactant specieID="bRaf"              />
        <Product  specieID="bRafRap1GTP"               />

        <forwardRate> 0.06e-3   </forwardRate>
        <reverseRate> 0.5e-3        </reverseRate>
      
    </Reaction>

    <!--add the reverse reaction? -->

<!--(Inactivation of bRafRap1GTP) bRafRap1GTP +Rap1Gap<-> bRafRap1GTPGap -> bRaf+Rap1Gap+Rap1GDP-->
    <Reaction name = "bRafRap1GTP+Rap1Gap--bRafRap1GTPGap" id="bRafRap1GTP+Rap1Gap--bRafRap1GTPGap">
        <Reactant specieID="bRafRap1GTP"           />
        <Reactant specieID="Rap1Gap"              />
        <Product  specieID="bRafRap1GTPGap"               />

        <forwardRate> .202e-3   </forwardRate>
        <reverseRate> 200e-3        </reverseRate>
 
    </Reaction> 

    <Reaction name = "bRafRap1GTPGap--bRaf+Rap1Gap+Rap1GDP" id="bRafRap1GTPGap--bRaf+Rap1Gap+Rap1GDP">
        <Reactant specieID="bRafRap1GTPGap"           />
        <Product specieID="bRaf"              />
        <Product specieID="Rap1Gap"              />
        <Product  specieID="Rap1GDP"               />

        <forwardRate> 2e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
   
    </Reaction> 

<!--(MAPKK phos1 by bRafRap1) MAPKK + bRafRap1GTP <-> bRafRap1GTPMAPKK <-> pMAPKK + bRafRap1GTP-->
    <Reaction name = "MAPKK+bRafRap1GTP--bRafRap1GTPMAPKK" id="MAPKK+bRafRap1GTP--bRafRap1GTPMAPKK">
        <Reactant specieID="MAPKK"           />
        <Reactant specieID="bRafRap1GTP"              />
        <Product  specieID="bRafRap1GTPMAPKK"               />

        <forwardRate> 0.00938e-3   </forwardRate>
        <reverseRate> 1.2e-3        </reverseRate>
      
    </Reaction> 
    <Reaction name = "bRafRap1GTPMAPKK--pMAPKK+bRafRap1GTP" id="bRafRap1GTPMAPKK--pMAPKK+bRafRap1GTP">
        <Reactant specieID="bRafRap1GTPMAPKK"           />
        <Product  specieID="pMAPKK"               />
        <Product  specieID="bRafRap1GTP"               />

        <forwardRate> 0.3e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
      
    </Reaction> 

<!--(MAPKK phos2 by bRafRap1) pMAPKK + bRafRap1GTP <-> bRafRap1GTPpMAPKK <-> ppMAPKK + bRafRap1GTP-->
    <Reaction name = "pMAPKK+bRafRap1GTP--bRafRap1GTPpMAPKK" id="pMAPKK+bRafRap1GTP--bRafRap1GTPpMAPKK">
        <Reactant specieID="pMAPKK"           />
        <Reactant specieID="bRafRap1GTP"              />
        <Product  specieID="bRafRap1GTPpMAPKK"               />

        <forwardRate> 0.00938e-3   </forwardRate>
        <reverseRate> 1.2e-3        </reverseRate>
 
    </Reaction> 
    <Reaction name = "bRafRap1GTPpMAPKK--ppMAPKK+bRafRap1GTP" id="bRafRap1GTPpMAPKK--ppMAPKK+bRafRap1GTP">
        <Reactant specieID="bRafRap1GTPpMAPKK"           />
        <Product  specieID="ppMAPKK"               />
        <Product  specieID="bRafRap1GTP"               />

        <forwardRate> 0.3e-3   </forwardRate>
        <reverseRate> 0       </reverseRate>
 
    </Reaction> 

<!--ERK ACTIVATION BY ppMAPKK-->

<!--(ERK phos1 by ppMAPKK) ppMAPKK+ERK <-> ppMAPKKERK <-> pERK+ppMAPKK-->
    <Reaction name = "ppMAPKK+ERK--ppMAPKKERK" id="ppMAPKK+ERK--ppMAPKKERK">
        <Reactant specieID="ppMAPKK"           />
        <Reactant specieID="ERK"              />
        <Product  specieID="ppMAPKKERK"               />

        <forwardRate> 0.0324e-3   </forwardRate>
        <reverseRate> 1.2e-3        </reverseRate>
      
    </Reaction> 
    <Reaction name = "ppMAPKKERK--pERK+ppMAPKK" id="ppMAPKKERK--pERK+ppMAPKK">
        <Reactant specieID="ppMAPKKERK"           />
        <Product  specieID="pERK"               />
        <Product  specieID="ppMAPKK"               />

        <forwardRate> 0.3e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
      
    </Reaction> 

<!--(ERK phos2 by ppMAPKK) ppMAPKK+pERK <-> ppMAPKKpERK <-> ppERK+ppMAPKK-->
    <Reaction name = "ppMAPKK+pERK--ppMAPKKpERK" id="ppMAPKK+pERK--ppMAPKKpERK">
        <Reactant specieID="ppMAPKK"           />
        <Reactant specieID="pERK"              />
        <Product  specieID="ppMAPKKpERK"               />

        <forwardRate> 0.0324e-3    </forwardRate>
        <reverseRate> 1.2e-3       </reverseRate>
      
    </Reaction> 
    <Reaction name = "ppMAPKKpERK--ppErk+ppMAPKK" id="ppMAPKKpERK--ppErk+ppMAPKK">
        <Reactant specieID="ppMAPKKpERK"           />
        <Product specieID="ppERK"              />
        <Product  specieID="ppMAPKK"               />

        <forwardRate> 0.3e-3  </forwardRate>
        <reverseRate> 0        </reverseRate>
      
    </Reaction> 

<!--(ppERK dephos1 by MKP1) ppERK+MKP1<-> ppERKMKP1 <-> pERK+MKP1-->
    <Reaction name = "ppERK+MKP1--ppERKMKP1" id="ppERK+MKP1--ppERKMKP1">
        <Reactant specieID="ppERK"           />
        <Reactant specieID="MKP1"              />
        <Product  specieID="ppERKMKP1"               />

        <forwardRate> 0.15e-3   </forwardRate>
        <reverseRate> 16e-3        </reverseRate>
        
    </Reaction> 
    <Reaction name = "ppERKMKP1--pERK+MKP1" id="ppERKMKP1--pERK+MKP1">
        <Reactant specieID="ppERKMKP1"           />
        <Product  specieID="pERK"               />
        <Product  specieID="MKP1"               />

        <forwardRate> 4e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
        
    </Reaction> 

<!--(ppERK dephos2 by MKP1) pERK+MKP1<-> pERKMKP1 <-> ERK+MKP1-->
    <Reaction name = "pERK+MKP1--pERKMKP1" id="pERK+MKP1--pERKMKP1">
        <Reactant specieID="pERK"           />
        <Reactant specieID="MKP1"              />
        <Product  specieID="pERKMKP1"               />

        <forwardRate> 0.15e-3   </forwardRate>
        <reverseRate> 16e-3      </reverseRate>
       
    </Reaction> 
    <Reaction name = "pERKMKP1--ERK+MKP1" id="pERKMKP1--ERK+MKP1">
        <Reactant specieID="pERKMKP1"           />
        <Product  specieID="ERK"               />
        <Product  specieID="MKP1"               />

        <forwardRate> 4e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
       
    </Reaction>

    
<!--(Gibg recruits kinase) Src Gbg+Src-GbgSrc-->
<Reaction name = "Gbg+Src--GbgSrc">
      <Reactant specieID="Gbg"/>
      <Reactant specieID="Src"/>
      <Reactant specieID="GbgSrc"/>

      <forwardRate> 0.0002e-3   </forwardRate>
      <reverseRate> 0.1e-3     </reverseRate>
      <Reaction>

<!--(GbgSrc activates Cbl) -->
<Reaction name = "Cbl+GbgSrc--CblGbgSrc">
      <Reactant specieID="Gbg"/>
      <Reactant specieID="Src"/>
      <Product specieID="GbgSrc"/>

      <forwardRate> 0.08e-3   </forwardRate>
      <reverseRate> 0.1e-3     </reverseRate>
      <Reaction>

<Reaction name = "CblGbgSrc--pCbl+GbgSrc">
      <Reactant specieID="pCblGbgSrc"/>
      <Product specieID="pCbl"/>
      <Product specieID="GbgSrc"/>

      <forwardRate> 40e-3   </forwardRate>
      <reverseRate>0    </reverseRate>
      <Reaction>


	---

<!-- ******* PKA from Asia Hippo Model ********* -->     
    <!--1) PKA + 2camp <-> PKAcAMP2 -->
    <Reaction name = "PKA_bind" id="PKA_bind">
	<Reactant specieID="PKA"/>
        <Reactant specieID="camp" n="2"/>
	<Product specieID="PKAcamp2"/>


        <forwardRate>0.261e-06</forwardRate>
	<reverseRate>0.060e-03</reverseRate>
    </Reaction>

    <!--2) PKAcAMP2 + 2camp <-> PKAcAMP4 -->
    <Reaction name = "PKAcamp2_bind" id="PKAcAMP2_bind">
	<Reactant specieID="PKAcamp2"/>
        <Reactant specieID="camp" n="2"/>
	<Product specieID="PKAcamp4"/>

	<forwardRate>0.35e-06</forwardRate>
	<reverseRate>0.6e-3</reverseRate>
    </Reaction>

<!--3) PKAcAMP4 <-> 2PKAr(as dimer) + 2PKAc(monomers) -->
    <Reaction name = "PKAcamp4_diss" id="PKAcamp4_diss">
	<Reactant specieID="PKAcamp4"/>
	<Product specieID="PKAr" />
	<Product specieID="PKAc" n="2"/>  

	<forwardRate>0.24e-03</forwardRate>
	<reverseRate>0.0255e-03</reverseRate>
    </Reaction>

 
 <!--*************** CamKII ************* ReDo/simplify with higher order Rxn-->

  <!--1) CamCa4 + CK <-> CKCamCa4  -->
    <Reaction name = "CK bind" id="CK_bind">
        <Reactant specieID="CamCa4"                 />
        <Reactant specieID="CK"                     />
        <Product  specieID="CKCamCa4"               />

        <forwardRate> 0.01e-3   </forwardRate>
        <reverseRate> 3e-3      </reverseRate>
        <!--0.8 from ode file
	    reverseRate> 0.8e-3      </reverseRate-->
    </Reaction>

<!--2a) 3 CKCamCa4 + 1 CKCamCa4 <-> 3  CKCamCa4 + 1 CKpCamCa4-->
    <Reaction name = "CKCam bind" id="CKCam_bind">
        <Reactant specieID="CKCamCa4"  power="4"        />
        <Product  specieID="CKCamCa4"   power="3"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 13.0e-18 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2b)  2 CKCamCa4 + 1 CKCamCa4 <-> 2 CKCamCa4 + 1 CKpCamCa4-->
    <Reaction name = "CKCam bind" id="CKCam_bind">
        <Reactant specieID="CKCamCa4"  power="3"        />
        <Product  specieID="CKCamCa4"  power="2"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 2.0e-12 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2c)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CKCam_bind">
        <Reactant specieID="CKpCamCa4"  power="2"        />
        <Reactant specieID="CKCamCa4"  power="2"        />
        <Product  specieID="CKCamCa4"           />
        <Product  specieID="CKpCamCa4" power="3"         />

        <forwardRate> 27.1e-18 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

  <!-- CKpCamCa4 <-> CKp + CamCa4 -->
    <Reaction name = "CKp auto" id="CKp_auto">
        <Reactant specieID="CKpCamCa4"              />
        <Product  specieID="CamCa4"                 />
        <Product  specieID="CKp"                    />

        <forwardRate> 0.0008e-3 </forwardRate>
        <reverseRate> 0.01e-3   </reverseRate>
    </Reaction>

    
 </ReactionScheme>
